Application:Speller%20Targets matrix TargetDefinitions= 9 { Display Enter Display%20Size Icon%20File Sound Intensified%20Icon } O O 1 D:\Universidad%20-%20Bioingenieria\Proyecto%20Final\Cognitask/calibracion/tarea%201/img6.png % %  C C 1 D:\Universidad%20-%20Bioingenieria\Proyecto%20Final\Cognitask/calibracion/tarea%201/img1.png % %  D D 1 D:\Universidad%20-%20Bioingenieria\Proyecto%20Final\Cognitask/calibracion/tarea%201/img9.png % %  A A 1 D:\Universidad%20-%20Bioingenieria\Proyecto%20Final\Cognitask/calibracion/tarea%201/img2.png % %  T T 1 D:\Universidad%20-%20Bioingenieria\Proyecto%20Final\Cognitask/calibracion/tarea%201/img7.png % %  N N 1 D:\Universidad%20-%20Bioingenieria\Proyecto%20Final\Cognitask/calibracion/tarea%201/img5.png % %  I I 1 D:\Universidad%20-%20Bioingenieria\Proyecto%20Final\Cognitask/calibracion/tarea%201/img4.png % %  G G 1 D:\Universidad%20-%20Bioingenieria\Proyecto%20Final\Cognitask/calibracion/tarea%201/img8.png % %  M M 1 D:\Universidad%20-%20Bioingenieria\Proyecto%20Final\Cognitask/calibracion/tarea%201/img3.png % % // speller target properties
Application:Speller string TextToSpell= CAMINO // character or string to spell in offline copy mode